PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999):03.0f}"', 'block': "['1', '2']", 'condition': "['gain','loss']"}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = 2023.1.3
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 250
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = GainLossTask
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine FixationCross
    CodeComponent FixationCrossCode
      Code Type = Auto->JS
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      Begin Routine:
        # Skip if session 2 and practice trial.
        if Block == 2 and Practice == 1:
            continueRoutine = False

        # Turn on eyetracking
        eyetracker.setRecordingState(True)
    PolygonComponent FixationCrossPolygon
      fillColor = white
      pos [set every repeat] = FixCrossLoc
      shape = cross
      size = [.05,.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    RegionOfInterestComponent FixCrossROI
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.5
      nVertices = 4
      ori = 0
      pos [set every repeat] = FixCrossLoc
      save = every look
      shape = rectangle
      size = [.15,.2]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine Feedback
    CodeComponent FeedbackCode
      Code Type = Py
      Begin Routine:
        # Skip if session 2 and practice trial.
        if Block == 2 and Practice == 1:
            continueRoutine = False

        # Show feedback?
        if goToFeedback == 1:
            continueRoutine = True
            FeedbackDuration = 1
        else:
            continueRoutine = False
            FeedbackDuration = 0.01

        # Position feedback rectangle based on response in last routine
        rectangle_position = (0,0)
        if Response.keys == 'left':
            rectangle_position = (-.5, 0)
        elif Response.keys == 'right':
            rectangle_position = (.5, 0)
    TextComponent LAmtText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $LAmt
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    TextComponent LProbText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $str(int(LProb*100)) + '%'
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    TextComponent RAmtText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $RAmt
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    TextComponent RProbText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $str(int(RProb*100)) + '%'
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    PolygonComponent FeedbackRectangle
      lineWidth = 12
      pos [set every repeat] = $rectangle_position
      shape = rectangle
      size = (0.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
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    PolygonComponent Divider_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = [.005, .75]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
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  Routine Choice
    CodeComponent ChoiceCode
      Code Type = Auto->JS
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      Begin Routine:
        # Skip if session 2 and practice trial.
        if Block == 2 and Practice == 1:
            continueRoutine = False

        # Tell the eyetracker what trial this is.

        eyetracker.sendMessage("TRIALSTART "+str(TrialNumber))
      End Routine:
        # Tell the eyetracker what trial this is.

        eyetracker.sendMessage("TRIALEND "+str(TrialNumber))
        TrialNumber = TrialNumber + 1

        # Proceed to Feedback, or skip to Faster?

        if not Response.keys:
            goToFeedback = 0
            sayFaster = 1
        else:
            goToFeedback = 1
            sayFaster = 0
    TextComponent LAmtText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $LAmt
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    TextComponent LProbText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $str(int(LProb*100)) + '%'
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    TextComponent RAmtText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $RAmt
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    TextComponent RProbText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $str(int(RProb*100)) + '%'
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    KeyboardComponent Response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      store = first key
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    RegionOfInterestComponent LROI
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = [-.5,0]
      save = every look
      shape = triangle
      size = [.2, .4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent RROI
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = [.5,0]
      save = every look
      shape = rectangle
      size = [.2, .4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent Divider
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = [.005, .75]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
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  Routine ExperimentBegin
    CodeComponent ExperimentBeginCode
      Code Type = Auto->JS
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      Begin Routine:
        # Indicator for Practice Trials

        Practice = 0;
    TextComponent ExperimentBeginText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice complete. Nice job!

        Ready to begin the real experiment? Press 'Down Arrow' when you're ready to start.
    KeyboardComponent ExperimentBeginResp
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeBegin
    CodeComponent PracticeBeginCode
      Code Type = Auto->JS
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      Begin Routine:
        if Block == 2:
            continueRoutine = False
    TextComponent PracticeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice.

        First, we will pratice 12 trials without the eye-tracker.

        When ready, press 'Down Arrow' to begin.
    KeyboardComponent PracticeResponse
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Consent
    TextComponent ConsentText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Consent to Participate in Research

        Thank you for participating in this study. The study should take about 60 minutes to complete, and you will be paid a participation fee of \$6 (with a bonus payment between \$0 and \$36). This research is performed by cognitive scientists at the California Institute of Technology and will be used to help understand human decision making. In this study, you will be asked to read carefully instructions describing the experiment, and to answer some questions about the instructions. Afterwards you will be asked to make a number of decisions. Your bonus payment will depend on the quality of your decisions, in addition to the participation fee mentioned above. No identifying information about you, like your name, phone number or address, will be recorded. By participating you are confirming that you are between 21 and 50 years of age, have normal or corrected-to-normal vision, and are not in the European Union or China. Your participation in this research is completely voluntary. You have the right to withdraw at any point during the study, for any reason, and without any prejudice. If you would like to contact the investigators in the study to discuss this research, please message us via the Prolific messaging system. By continuing, you are confirming that you understand these instructions and conditions of participation.

        Press 'Down Arrow' to continue.
    KeyboardComponent ConsentResponse
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    CodeComponent WelcomeCode
      Code Type = Auto->JS
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      Begin Routine:
        # Indicator for Practice Trials

        Practice = 1
    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        The experimenter will hand you a paper with instructions on them. Please read them carefully!

        If this is your second block of trials, you can simply continue.

        Press 'Down Arrow' once you're done with the instructions and your experimenter has answered all your questions.
    KeyboardComponent WelcomeResponse
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InitialCode
    CodeComponent InitialCodeCode
      Code Type = Auto->JS
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      Begin Experiment:
        # Some details about the experiment.

        TrialNumber = 1 # Send messages to the eyetracker with trial number.
        MaxDecisionTime = 10 # How long do subjects have to make a choice?

        # Set FasterColor to black for now. Changes at Choice Routine.

        FasterColor = "black"

        # Experiment Settings

        Condition = expInfo['condition']
        Block = int(expInfo['block'])
  Routine SelectedGambles
    CodeComponent SelectedGamblesCode
      Code Type = Auto->JS
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      Begin Routine:
        # Cut out the practice trials.

        ChoiceAmt = ChoiceAmt[NumPracTrials:]
        ChoiceProb = ChoiceProb[NumPracTrials:]

        # Select a random gain and loss trial.

        if expInfo['block_order'] == 'gl':
            GainTrialIndex = int(randint(low=0, high=NumGainTrials-1, size=1) )
            LossTrialIndex = int( randint(low=NumGainTrials, high=NumGainTrials+NumLossTrials-1, size=1) )
        if expInfo['block_order'] == 'lg':
            LossTrialIndex = int(randint(low=0, high=NumLossTrials-1, size=1) )
            GainTrialIndex = int( randint(low=NumLossTrials, high=NumGainTrials+NumLossTrials-1, size=1) )

        # What to display?

        GainAmt = ChoiceAmt[GainTrialIndex]
        GainProb = ChoiceProb[GainTrialIndex]
        LossAmt = ChoiceAmt[LossTrialIndex]
        LossProb = ChoiceProb[LossTrialIndex]
    TextComponent SeletedGamblesText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Gain Gamble Selected: \n\n' + str(GainAmt) + '\n' + str(int(GainProb*100)) + '%' + '\n\n' + 'Loss Gamble Selected: \n\n' + str(LossAmt) + '\n' + str(int(LossProb*100)) + '%' + '\n\n' + "Please wait for your experimenter to [c]ontinue."
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    KeyboardComponent SelectedGamblesResponse
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    CodeComponent ITICode
      Code Type = Auto->JS
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      Begin Routine:
        # Skip if session 2 and practice trial.
        if Block == 2 and Practice == 1:
            continueRoutine = False

        # Turn off eyetracking
        eyetracker.setRecordingState(False)

        # Show faster screen?
        if sayFaster == 1:
            ITITextVar = "Faster!"
        else:
            ITITextVar = "   "
    TextComponent ITIText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $ITITextVar
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  EyetrackerValidationRoutine Validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine StartBlock1
    TextComponent StartBlockText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Starting Block 1 of 2.

        This block has 100 trials. Please stay as still as possible during the trials. You'll be able to take a break and stretch after!

        When ready, press 'Down Arrow' to begin.
    KeyboardComponent key_resp
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock1
    TextComponent EndBlock1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of Block 1 of 2.

        Feel free to take a break. When you're ready, please let the experimenter know and press 'Down Arrow' to continue.
    KeyboardComponent EndBlock1Response
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartBlock2
    TextComponent StartBlockText_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Starting Block 2 of 2.

        This block has 100 trials. Please stay as still as possible during the trials. You'll be able to take a break and stretch after!

        When ready, press 'Down Arrow' to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock2
    TextComponent EndBlock2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of Block 2 of 2.

        Press 'Down Arrow' to select a trial and play the gamble selected in that trial.
    KeyboardComponent EndBlock2Response
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndCode
    CodeComponent EndCodeCode
      Code Type = Auto->JS
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      End Routine:
        # Close the connection with the eyetracker.
        # This should result in Eyelink saving the EDF file to your default data folder.

        if eyetracker:
            eyetracker.setConnectionState(False)
  Routine StartBlock3
    TextComponent StartBlockText_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Starting Block 3 of 4.

        This block has 100 trials. Please stay as still as possible during the trials. You'll be able to take a break and stretch after!

        When ready, press 'Down Arrow' to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock3
    TextComponent EndBlock2Text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of Block 3 of 4.

        Feel free to take a break. When you're ready, please let the experimenter know and press 'Down Arrow' to continue.
    KeyboardComponent EndBlock2Response_2
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartBlock4
    TextComponent StartBlockText_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Starting Block 4 of 4.

        This block has 100 trials. Please stay as still as possible during the trials. You'll be able to take a break and stretch after!

        When ready, press 'Down Arrow' to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock4
    TextComponent EndBlock2Text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of Block 4 of 4. Experiment complete!

        Press 'Down Arrow' to select a trial and play the gamble selected in that trial.
    KeyboardComponent endblockresp
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine Calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  Routine InitialCode
  Routine Welcome
  EyetrackerCalibrationRoutine Calibration
  Routine PracticeBegin
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = spreadsheet_practice.csv
    loopType = random
    nReps = 1
    random seed = 4
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    conditions:
      [OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 0.64), ('LAmt', 6.1), ('RProb', 0.32), ('RAmt', 7.7), ('TextColor', 'green'), ('FixCrossLoc', [0, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 0.67), ('LAmt', 7.6), ('RProb', 0.41), ('RAmt', 11.4), ('TextColor', 'green'), ('FixCrossLoc', [0, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 0.9), ('LAmt', 6.4), ('RProb', 0.62), ('RAmt', 7.7), ('TextColor', 'green'), ('FixCrossLoc', [-0.5, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 0.13), ('LAmt', 11.7), ('RProb', 0.35), ('RAmt', 8.7), ('TextColor', 'green'), ('FixCrossLoc', [-0.5, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 0.62), ('LAmt', 9.5), ('RProb', 0.55), ('RAmt', 10.6), ('TextColor', 'green'), ('FixCrossLoc', [0.5, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 0.38), ('LAmt', 12.0), ('RProb', 0.4), ('RAmt', 8.9), ('TextColor', 'green'), ('FixCrossLoc', [0.5, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'loss'), ('Sanity', 0), ('LProb', 0.39), ('LAmt', -7.0), ('RProb', 0.52), ('RAmt', -6.9), ('TextColor', 'red'), ('FixCrossLoc', [-0.5, 0])])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
    Routine FixationCross
    Routine Choice
    Routine Feedback
    Routine ITI
  LoopTerminator Practice
  Routine ExperimentBegin
  Routine StartBlock1
  LoopInitiator Trial_Block1 loopType="TrialHandler"
    conditionsFile = $'spreadsheet_' + Condition + '1.csv'
    loopType = random
    nReps = 1
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    Routine FixationCross
    Routine Choice
    Routine Feedback
    Routine ITI
  LoopTerminator Trial_Block1
  Routine EndBlock1
  EyetrackerCalibrationRoutine Calibration
  Routine StartBlock2
  LoopInitiator Trial_Block2 loopType="TrialHandler"
    conditionsFile = $'spreadsheet_' + Condition + '2.csv'
    loopType = random
    nReps = 1
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    Routine FixationCross
    Routine Choice
    Routine Feedback
    Routine ITI
  LoopTerminator Trial_Block2
  Routine EndBlock2
  Routine EndCode
