PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'block_order': "['gl','lg']", 'practice_trials': '2', 'gain_trials': '2', 'loss_trials': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 250
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = GainLossTask
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine FixationCross
    CodeComponent FixationCrossCode
      Code Type = Auto->JS
    PolygonComponent FixationCrossPolygon
      fillColor = white
      pos [set every repeat] = FixCrossLoc
      shape = cross
      size = [.05,.05]
      startVal [time (s)] = 0.0
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    RegionOfInterestComponent FixCrossROI
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.5
      nVertices = 4
      ori = 0
      pos [set every repeat] = FixCrossLoc
      save = every look
      shape = rectangle
      size = [.15,.2]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine Feedback
    CodeComponent FeedbackCode
      Code Type = Py
      Begin Routine:
        # Show feedback?
        if goToFeedback == 1:
            continueRoutine = True
            FeedbackDuration = 1
        else:
            continueRoutine = False
            FeedbackDuration = 0.01

        # Position feedback rectangle based on response in last routine
        rectangle_position = (0,0)
        if Response.keys == 'left':
            rectangle_position = (-.5, 0)
        elif Response.keys == 'right':
            rectangle_position = (.5, 0)
    TextComponent LAmtText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $LAmt
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    TextComponent LProbText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $str(int(LProb*100)) + '%'
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    TextComponent RAmtText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $RAmt
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    TextComponent RProbText_2
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
      text [set every repeat] = $str(int(RProb*100)) + '%'
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    PolygonComponent FeedbackRectangle
      lineWidth = 12
      pos [set every repeat] = $rectangle_position
      shape = rectangle
      size = (0.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
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    PolygonComponent Divider_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = [.005, .75]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FeedbackDuration
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  Routine Choice
    CodeComponent ChoiceCode
      Code Type = Auto->JS
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      Begin Routine:
        # Tell the eyetracker what trial this is.

        eyetracker.sendMessage("TRIALSTART "+str(TrialNumber))
      End Routine:
        # Tell the eyetracker what trial this is.

        eyetracker.sendMessage("TRIALEND "+str(TrialNumber))
        TrialNumber = TrialNumber + 1

        # Proceed to Feedback, or skip to Faster?

        if not Response.keys:
            goToFeedback = 0
            sayFaster = 1
        else:
            goToFeedback = 1
            sayFaster = 0

        # Store responses and payments in placeholders.
        # If no response, record the worse EV lottery.

        if Response.keys == "left":
            ChoiceAmt.append(LAmt)
            ChoiceProb.append(LProb)
        elif Response.keys == "right":
            ChoiceAmt.append(RAmt)
            ChoiceProb.append(RProb)
        else:
            if LAmt*LProb > RAmt*RProb:
                ChoiceAmt.append(RAmt)
                ChoiceProb.append(RProb)
            else:
                ChoiceAmt.append(LAmt)
                ChoiceProb.append(LProb)
    TextComponent LAmtText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $LAmt
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    TextComponent LProbText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (-.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $str(int(LProb*100)) + '%'
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    TextComponent RAmtText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $RAmt
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    TextComponent RProbText
      color [set every repeat] = $TextColor
      letterHeight = 0.1
      pos = (.5, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      text [set every repeat] = $str(int(RProb*100)) + '%'
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    KeyboardComponent Response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      store = first key
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    RegionOfInterestComponent LLottery
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = [-.5,0]
      save = every look
      shape = triangle
      size = [.2, .4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent RLottery
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = [.5,0]
      save = every look
      shape = rectangle
      size = [.2, .4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent Divider
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = [.005, .75]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MaxDecisionTime
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  Routine ExperimentBegin
    TextComponent ExperimentBeginText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice complete. Nice job!

        Ready to begin the real experiment? Press 'Down Arrow' when you're ready to start.
    KeyboardComponent ExperimentBeginResp
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent PracticeETStop
      actionType = Stop Only
      stopVal [duration (s)] = 0
      syncScreenRefresh = False
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  Routine PracticeBegin
    TextComponent PracticeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice.

        First, we will pratice 12 trials without the eye-tracker.

        When ready, press 'Down Arrow' to begin.
    KeyboardComponent PracticeResponse
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent PracticeETStart
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Consent
    TextComponent ConsentText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Consent to Participate in Research

        Thank you for participating in this study. The study should take about 60 minutes to complete, and you will be paid a participation fee of \$6 (with a bonus payment between \$0 and \$36). This research is performed by cognitive scientists at the California Institute of Technology and will be used to help understand human decision making. In this study, you will be asked to read carefully instructions describing the experiment, and to answer some questions about the instructions. Afterwards you will be asked to make a number of decisions. Your bonus payment will depend on the quality of your decisions, in addition to the participation fee mentioned above. No identifying information about you, like your name, phone number or address, will be recorded. By participating you are confirming that you are between 21 and 50 years of age, have normal or corrected-to-normal vision, and are not in the European Union or China. Your participation in this research is completely voluntary. You have the right to withdraw at any point during the study, for any reason, and without any prejudice. If you would like to contact the investigators in the study to discuss this research, please message us via the Prolific messaging system. By continuing, you are confirming that you understand these instructions and conditions of participation.

        Press 'Down Arrow' to continue.
    KeyboardComponent ConsentResponse
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        The experimenter will hand you a paper with instructions on them. Please read them carefully!

        Press 'Down Arrow' to continue.
    KeyboardComponent WelcomeResponse
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InitialCode
    CodeComponent InitialCodeCode
      Code Type = Auto->JS
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      Begin Experiment:
        # Placeholders

        ChoiceAmt = []
        ChoiceProb = []

        # Some details about the experiment.

        NumPracTrials = int(expInfo['practice_trials']) # Number of practice trials
        NumGainTrials = int(expInfo['gain_trials']) # Number of gain trials
        NumLossTrials = int(expInfo['loss_trials']) # Number of loss trials
        TrialNumber = -1*NumPracTrials + 1 # Real trials start at 1.
        MaxDecisionTime = 10 # How long do subjects have to make a choice?

        # Set FasterColor to black for now. Changes at Choice Routine.

        FasterColor = "black"

        # Order of blocks.

        if expInfo['block_order'] == 'gl':
            block1spread = 'gain'
            block2spread = 'loss'
        elif expInfo['block_order'] == 'lg':
            block1spread = 'loss'
            block2spread = 'gain'
  Routine SelectedGambles
    CodeComponent SelectedGamblesCode
      Code Type = Auto->JS
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      Begin Routine:
        # Cut out the practice trials.

        ChoiceAmt = ChoiceAmt[NumPracTrials:]
        ChoiceProb = ChoiceProb[NumPracTrials:]

        # Select a random gain and loss trial.

        if expInfo['block_order'] == 'gl':
            GainTrialIndex = int(randint(low=0, high=NumGainTrials-1, size=1) )
            LossTrialIndex = int( randint(low=NumGainTrials, high=NumGainTrials+NumLossTrials-1, size=1) )
        if expInfo['block_order'] == 'lg':
            LossTrialIndex = int(randint(low=0, high=NumLossTrials-1, size=1) )
            GainTrialIndex = int( randint(low=NumLossTrials, high=NumGainTrials+NumLossTrials-1, size=1) )

        # What to display?

        GainAmt = ChoiceAmt[GainTrialIndex]
        GainProb = ChoiceProb[GainTrialIndex]
        LossAmt = ChoiceAmt[LossTrialIndex]
        LossProb = ChoiceProb[LossTrialIndex]
    TextComponent SeletedGamblesText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Gain Gamble Selected: \n\n' + str(GainAmt) + '\n' + str(int(GainProb*100)) + '%' + '\n\n' + 'Loss Gamble Selected: \n\n' + str(LossAmt) + '\n' + str(int(LossProb*100)) + '%' + '\n\n' + "Please wait for your experimenter to [c]ontinue."
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    KeyboardComponent SelectedGamblesResponse
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    CodeComponent ITICode
      Code Type = Auto->JS
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      Begin Routine:
        # Show faster screen?
        if sayFaster == 1:
            ITITextVar = "Faster!"
        else:
            ITITextVar = "   "
    TextComponent ITIText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $ITITextVar
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  EyetrackerCalibrationRoutine Calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine Validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine StartBlock1
    TextComponent StartBlockText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Block 1 of 2 starting.
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    EyetrackerRecordComponent Block1ETStart
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine EndBlock1
    TextComponent EndBlock1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of block 1 of 2.

        Feel free to take a break. When you're ready, please let the experimenter know and press 'Down Arrow' to continue.
    KeyboardComponent EndBlock1Response
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent Block1ETStop
      actionType = Stop Only
      stopVal [duration (s)] = 0
      syncScreenRefresh = True
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  Routine StartBlock2
    TextComponent StartBlockText_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Block 2 of 2 starting.
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    EyetrackerRecordComponent Block2ETStart
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine EndBlock2
    TextComponent EndBlock2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of Block 2 of 2. Experiment complete!

        Press 'Down Arrow' to view the gambles you will be playing.
    KeyboardComponent EndBlock2Response
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent Block2ETStop
      actionType = Stop Only
      stopVal [duration (s)] = 0
      syncScreenRefresh = True
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  Routine EndCode
    CodeComponent EndCodeCode
      Code Type = Auto->JS
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      End Routine:
        # Close the connection with the eyetracker.
        # This should result in Eyelink saving the EDF file to your default data folder.

        if eyetracker:
            eyetracker.setConnectionState(False)
Flow
  Routine InitialCode
  Routine Consent
  Routine Welcome
  EyetrackerCalibrationRoutine Calibration
  Routine PracticeBegin
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = spreadsheet_practice.csv
    loopType = random
    nReps = 1
    random seed = 4
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    conditions:
      [OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 6.1), ('LAmt', 0.64), ('RProb', 7.7), ('RAmt', 0.32), ('TextColor', 'green'), ('FixCrossLoc', [0, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 7.6), ('LAmt', 0.67), ('RProb', 11.4), ('RAmt', 0.41), ('TextColor', 'green'), ('FixCrossLoc', [0, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 6.4), ('LAmt', 0.9), ('RProb', 7.7), ('RAmt', 0.62), ('TextColor', 'green'), ('FixCrossLoc', [-0.5, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 11.7), ('LAmt', 0.13), ('RProb', 8.7), ('RAmt', 0.35), ('TextColor', 'green'), ('FixCrossLoc', [-0.5, 0])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 9.5), ('LAmt', 0.62), ('RProb', 10.6), ('RAmt', 0.55), ('TextColor', 'green'), ('FixCrossLoc', [0, 0.5])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'gain'), ('Sanity', 0), ('LProb', 12.0), ('LAmt', 0.38), ('RProb', 8.9), ('RAmt', 0.4), ('TextColor', 'green'), ('FixCrossLoc', [0, 0.5])]),
      OrderedDict([('TrialType', 'Practice'), ('Condition', 'loss'), ('Sanity', 0), ('LProb', -7.0), ('LAmt', 0.39), ('RProb', -6.9), ('RAmt', 0.52), ('TextColor', 'red'), ('FixCrossLoc', [-0.5, 0])])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
    Routine FixationCross
    Routine Choice
    Routine Feedback
    Routine ITI
  LoopTerminator Practice
  Routine ExperimentBegin
  Routine StartBlock1
  LoopInitiator Trial_Block1 loopType="TrialHandler"
    conditionsFile = $'spreadsheet_' + block1spread + '.csv'
    loopType = random
    nReps = 1
    random seed = 4
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    Routine FixationCross
    Routine Choice
    Routine Feedback
    Routine ITI
  LoopTerminator Trial_Block1
  Routine EndBlock1
  Routine StartBlock2
  LoopInitiator Trial_Block2 loopType="TrialHandler"
    conditionsFile = $'spreadsheet_' + block2spread + '.csv'
    loopType = random
    nReps = 1
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    Routine FixationCross
    Routine Choice
    Routine Feedback
    Routine ITI
  LoopTerminator Trial_Block2
  Routine EndBlock2
  Routine SelectedGambles
  Routine EndCode
